opentrons/protocol-designer 5.2.3
schemaVersion: 3
protocolName: Water Transfer
author: Nathaniel Blalock
description: Learning to use OT2
robot: {model: OT-2 Standard}
defaultValues: {aspirate_mmFromBottom: 1, dispense_mmFromBottom: 0.5, touchTip_mmFromTop: -1, blowout_mmFromTop: 0}
pipettes:
  p300_multi_gen2: {mount: left}
  p20_single_gen2: {mount: right}
labware:
  Trash: {definitionId: opentrons/opentrons_1_trash_1100ml_fixed/1, slot: 12}
  Opentrons 96 Filter Tip Rack 200 µL: {definitionId: opentrons/opentrons_96_filtertiprack_200ul/1, slot: 8}
  NEST 12 Well Reservoir 15 mL: {definitionId: opentrons/nest_12_reservoir_15ml/1, slot: 9}
  ThermoFischer 96 Well Plate 400 µL: {definitionId: custom_beta/thermofischer_96_wellplate_400ul/1, slot: 11}
pipetteTiprackAssignments:
  p300_multi_gen2: opentrons/opentrons_96_filtertiprack_200ul/1
  p20_single_gen2: opentrons/opentrons_96_filtertiprack_20ul/1
ingredients:
  - H2O: {description: Water}
ingredLocations:
  NEST 12 Well Reservoir 15 mL:
    H2O {volume: 5000}: A1
savedStepForms:
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_multi_gen2
  volume: 60
  path: single
  changeTip: once
  aspirate_labware: NEST 12 Well Reservoir 15 mL
  aspirate_wells: A1
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  dispense_labware: ThermoFischer 96 Well Plate 400 µL
  dispense_wells: A1-A3
  dispense_mmFromBottom: 0.5
- stepType: mix
  stepName: mix
  pipette: p300_multi_gen2
  volume: 35
  times: 2
  changeTip: once
  labware: ThermoFischer 96 Well Plate 400 µL
  wells: A1-A3
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  mix_mmFromBottom: 0.5
  mix_touchTip_checkbox: true
labwareDefinitions:
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  custom_beta/thermofischer_96_wellplate_400ul/1:
    brand: {brand: ThermoFischer, brandId: [260860]}
    metadata: {displayName: ThermoFischer 96 Well Plate 400 µL, displayCategory: wellPlate, displayVolumeUnits: µL, tags: []}
    dimensions: {xDimension: 127.76, yDimension: 85.47, zDimension: 14.4}
    parameters: {format: irregular, quirks: [], isTiprack: false, isMagneticModuleCompatible: false, loadName: thermofischer_96_wellplate_400ul}
    namespace: custom_beta
    version: 1
    wells:
      A1: {depth: 11.3, totalLiquidVolume: 400, shape: circular, diameter: 7, x: 14.4, y: 74.27, z: 3.1}
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commands:
- pickUpTip: {pipette: p300_multi_gen2, labware: Opentrons 96 Filter Tip Rack 200 µL, well: A1}
- aspirate: {pipette: p300_multi_gen2, volume: 60, labware: NEST 12 Well Reservoir 15 mL, well: A1, offsetFromBottomMm: 1, flowRate: 94}
- dispense: {pipette: p300_multi_gen2, volume: 60, labware: ThermoFischer 96 Well Plate 400 µL, well: A1, offsetFromBottomMm: 0.5, flowRate: 94}
- aspirate: {pipette: p300_multi_gen2, volume: 60, labware: NEST 12 Well Reservoir 15 mL, well: A1, offsetFromBottomMm: 1, flowRate: 94}
- dispense: {pipette: p300_multi_gen2, volume: 60, labware: ThermoFischer 96 Well Plate 400 µL, well: A2, offsetFromBottomMm: 0.5, flowRate: 94}
- aspirate: {pipette: p300_multi_gen2, volume: 60, labware: NEST 12 Well Reservoir 15 mL, well: A1, offsetFromBottomMm: 1, flowRate: 94}
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